PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'name': '', 'age': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = mentalrotationtask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $image1
      pos = (0.25, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $image2
      pos = (-0.25, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Mental Rotation Game

        The image on the left is the reference, and the image on the right is either rotated or rotated AND mirrored
        Respond by clicking:
        Right Arrow for Rotated
        Left Arrow for Rotated AND Mirrored

        Press SPACE to start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will be shown two
        images.

          Press the RIGHT Arrow
        key when the two images are the
        same shape just rotated.

          Press the LEFT Arrow
        when the two images are mirrored
        and rotated.

        Press SPACE to see an example.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine examplerotate
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Let's practice:

        Are the following images
        rotated
            or
        mirrored and rotated?
    ImageComponent image_3
      image = C:\Users\SUHANI PANDYA\OneDrive\Desktop\soloproject\images\1_0a.jpg
      pos = (0.25, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
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    ImageComponent image_4
      image = C:\Users\SUHANI PANDYA\OneDrive\Desktop\soloproject\images\1_45a.jpg
      pos = (-0.25, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
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    TextComponent feedback
      letterHeight = 0.05
      startVal [time (s)] = 7
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      text:
        If you thought rotated,
        then you were correct.

        You would have pressed the
        RIGHT arrow key.

        Press the RIGHT arrow key to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 7
      store = nothing
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  Routine examplemirror
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Let's practice one more time:

        Are the following images
          rotated
            or
        mirrored and rotated?
    ImageComponent image_5
      image = C:\Users\SUHANI PANDYA\OneDrive\Desktop\soloproject\images\1_0a.jpg
      pos = (0.25, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
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    ImageComponent image_6
      image = C:\Users\SUHANI PANDYA\OneDrive\Desktop\soloproject\images\1_45a.jpg
      pos = (-0.25, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 7
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      text:
        If you thought mirrored AND rotated,
        then you were correct.

        You would have pressed the LEFT
        arrow key.

        Press the LEFT arrow key to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 7
      store = nothing
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  Routine finalcheck
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        To reiterate

        The image on the left is the reference, and the image on the left is either rotated or rotated AND mirrored
        Respond by clicking:
        Right Arrow for Rotated
        Left Arrow for Rotated AND Mirrored

        Press SPACE to continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_2
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $msg
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  Routine thanks
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text = Thank you for participating!
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Flow
  Routine instructions
  Routine check
  Routine examplerotate
  Routine examplemirror
  Routine finalcheck
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condsfile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image1': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\1_0a.jpg', 'image2': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\1_45a.jpg', 'corrAns': 'right', 'degrees': 45},
      {'image1': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\1_0a.jpg', 'image2': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\1_45b.jpg', 'corrAns': 'left', 'degrees': 45},
      {'image1': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_0a.jpg', 'image2': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_90a.jpg', 'corrAns': 'right', 'degrees': 90},
      {'image1': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_0a.jpg', 'image2': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_90a.jpg', 'corrAns': 'left', 'degrees': 90},
      {'image1': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_30a.jpg', 'image2': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_165b.jpg', 'corrAns': 'left', 'degrees': 135},
      {'image1': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\1_45a.jpg', 'image2': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\1_280a.jpg', 'corrAns': 'right', 'degrees': 135},
      {'image1': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_125a.jpg', 'image2': 'C:\\Users\\SUHANI PANDYA\\OneDrive\\Desktop\\soloproject\\images\\2_305b.jpg', 'corrAns': 'left', 'degrees': 180}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
    Routine trial
  LoopTerminator trials
  Routine thanks
