PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = word priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = studywords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'Laptop'},
      {'study_word': 'Chart'},
      {'study_word': 'T-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'Pastry'},
      {'study_word': 'Case'},
      {'study_word': 'Cruise'},
      {'study_word': 'Police'},
      {'study_word': 'Keys'},
      {'study_word': 'Poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = testwords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p'},
      {'test_word': '_ha_t'},
      {'test_word': 'T_hi_t'},
      {'test_word': '_ou_se'},
      {'test_word': 'P_s_r_y'},
      {'test_word': 'c_s_'},
      {'test_word': '_ru_is_'},
      {'test_word': 'P_li_e'},
      {'test_word': 'K_y_'},
      {'test_word': 'P_st_r'},
      {'test_word': '_o_rd'},
      {'test_word': '_a_bl_'},
      {'test_word': '_ho_e'},
      {'test_word': '_oo_'},
      {'test_word': 'c_s_io_'},
      {'test_word': 'ta_l_'},
      {'test_word': 'p_nc_l'},
      {'test_word': 'v_s_'},
      {'test_word': 'bo_t_e'},
      {'test_word': 'c_m_ra'}]
    Routine test
  LoopTerminator trials_2
